PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 2
  Audio lib = ptb
  Data filename = u'data/%s/%s' % (expInfo['Nombre'], expName)
  Enable Escape = False
  Experiment info = {'Nombre': '', 'Edad': '', 'Lateralidad': '["","Derecha","Izquierda"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = paradigma
  keyboardBackend = ioHub
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Routines
  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Gracias por participar
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones
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    TextComponent instrucciones_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $open(f'resources/TextosInstrucciones/{cont_inst}.{instrucciones_filename[cont_inst]}.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine grabacion_sin_estimulo
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
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    ImageComponent image
      image = resources/microphone.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        recorder.start_recording(f'data/{expInfo["Nombre"]}/HospitalItaliano_{expInfo["Nombre"]}_{instrucciones_filename[cont_inst]}.wav')
      End Routine:
        recorder.stop_recording()
  Routine prueba_texto
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    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        $open(f'resources/TextoA.txt', encoding='utf-8').read()
  Routine welcome
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    TextComponent text_welcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        $open(f'resources/TextosInstrucciones/0.Bienvenida.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_general
      Code Type = Py
      Before Experiment:
        from audioRecorder import AudioRecorder
        import pandas as pd
        import os
        import serial.tools.list_ports

        def list_serial_ports():
            ports = serial.tools.list_ports.comports()
            arduino_ports = []

            for port in ports:
                # You can add more checks here based on the specific attributes of your Arduino
                if 'Arduino' in port.description or 'CH340' in port.description:
                    arduino_ports.append(port.device)

            return arduino_ports[0]
      Begin Experiment:
        puerto = list_serial_ports()
        recorder = AudioRecorder(mic_id = 0, sample_rate = 48000, channels = 1, arduino_port = puerto)
      End Experiment:
        recorder._serial.close()

        tempFileName = thisExp.dataFileName + '_TEMP.csv'
        thisExp.saveAsWideText(tempFileName)
        df = pd.read_csv(tempFileName, delimiter=',')

        df = df.fillna(method='bfill')
        df = df.fillna(method='ffill')
        idx = len(df) * [False]
        idx[0] = True

        # Select the first row
        first_row_df = df[idx]

        first_row_df = first_row_df.dropna(axis=1, how='all')
        first_row_df.to_csv(thisExp.dataFileName + '_spanish.csv', sep=';', decimal=',', index=False)

        os.remove(tempFileName)
  Routine typical_day_instructions
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    TextComponent text_typical_day_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        $open(f'resources/TextosInstrucciones/1.DiaTipico.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_typical_day_instructions
      allowedKeys = 'space','s'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine typical_day_recording
    RoutineSettingsComponent typical_day_recording
      skipIf = key_resp_typical_day_instructions.keys == 's'
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    KeyboardComponent key_resp_typical_day
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.5
      store = nothing
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    ImageComponent image_microphone_typical_day
      image = resources/microphone.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        if key_resp_typical_day_instructions.keys != 's':
            recorder.start_recording(f'data/{expInfo["Nombre"]}/{expInfo["Nombre"]}_DiaTipico.wav')
      End Routine:
        if key_resp_typical_day_instructions.keys != 's':
            recorder.stop_recording()
            tempFileName = thisExp.dataFileName + '_TEMP.csv'
            thisExp.saveAsWideText(tempFileName)
  Routine pleasant_memory_instructions
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    TextComponent text_pleasant_memory_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        $open(f'resources/TextosInstrucciones/2.RecuerdoAgradable.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_pleasant_memory_instructions
      allowedKeys = 'space','s'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine pleasant_memory_recording
    RoutineSettingsComponent pleasant_memory_recording
      skipIf = key_resp_pleasant_memory_instructions.keys == 's'
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    KeyboardComponent key_resp_pleasant_memory
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.5
      store = nothing
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    ImageComponent image_microphone_pleasant_memory
      image = resources/microphone.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        if key_resp_pleasant_memory_instructions.keys != 's':
            recorder.start_recording(f'data/{expInfo["Nombre"]}/{expInfo["Nombre"]}_RecuerdoAgradable.wav')
      End Routine:
        if key_resp_pleasant_memory_instructions.keys != 's':
            recorder.stop_recording()
            tempFileName = thisExp.dataFileName + '_TEMP.csv'
            thisExp.saveAsWideText(tempFileName)
  Routine picture_description_instructions
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    TextComponent text_picture_decription_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $open(f'resources/TextosInstrucciones/3.DescripcionDeLamina1.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_picture_description_instructions
      allowedKeys = 'space','s'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine picture
    RoutineSettingsComponent picture
      skipIf = key_resp_picture_description_instructions.keys == 's'
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    ImageComponent picture_descrition_image
      image = $"resources/DescripcionDeLamina1.png"
      size = 0.8
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_picture_description
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if key_resp_picture_description_instructions.keys != 's':
            recorder.start_recording(f'data/{expInfo["Nombre"]}/{expInfo["Nombre"]}_DescripcionDeLamina1.wav')
      End Routine:
        if key_resp_picture_description_instructions.keys != 's':
            recorder.stop_recording()
            tempFileName = thisExp.dataFileName + '_TEMP.csv'
            thisExp.saveAsWideText(tempFileName)
  Routine picture_description_instructions_2
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    TextComponent text_picture_decription_instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $open(f'resources/TextosInstrucciones/3.DescripcionDeLamina1.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_picture_description_instructions_2
      allowedKeys = 'space','s'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine picture_2
    RoutineSettingsComponent picture_2
      skipIf = key_resp_picture_description_instructions_2.keys == 's'
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    ImageComponent picture_descrition_image_2
      image = $f"resources/DescripcionDeLamina2.jpg"
      size = 0.8
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_picture_description_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        if key_resp_picture_description_instructions_2.keys != 's':
            recorder.start_recording(f'data/{expInfo["Nombre"]}/{expInfo["Nombre"]}_DescripcionDeLamina2.wav')
      End Routine:
        if key_resp_picture_description_instructions_2.keys != 's':
            recorder.stop_recording()
            tempFileName = thisExp.dataFileName + '_TEMP.csv'
            thisExp.saveAsWideText(tempFileName)
  Routine retelling_instructions
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    TextComponent text_retelling_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $open(f'resources/TextosInstrucciones/5.a.RenarracionDeHistoria.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_retelling
      allowedKeys = 'space','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine story
    RoutineSettingsComponent story
      skipIf = key_resp_retelling.keys == 's'
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if key_resp_retelling.keys != 's':
            recorder._send_pulse_to_arduino()
      End Routine:
        if key_resp_retelling.keys != 's':
            recorder._send_pulse_to_arduino()
    SoundComponent story_retelling
      sound = resources/Audio_re-narración.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
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  Routine retelling_instructions_2
    RoutineSettingsComponent retelling_instructions_2
      skipIf = key_resp_retelling.keys == 's'
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    TextComponent text_retelling_instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $open(f'resources/TextosInstrucciones/5.b.RenarrancionDeHistoria.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_retelling_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retelling_recording
    RoutineSettingsComponent retelling_recording
      skipIf = key_resp_retelling.keys == 's'
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    KeyboardComponent key_resp_retelling_recording
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.5
      store = nothing
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    ImageComponent image_microphone_retelling
      image = resources/microphone.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        if key_resp_retelling.keys != 's':
            recorder.start_recording(f'data/{expInfo["Nombre"]}/{expInfo["Nombre"]}_RenarracionDeHistoria.wav')
      End Routine:
        if key_resp_retelling.keys != 's':
            recorder.stop_recording()
            tempFileName = thisExp.dataFileName + '_TEMP.csv'
            thisExp.saveAsWideText(tempFileName)
  Routine reading_instructions
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    TextComponent text_reading_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $open(f'resources/TextosInstrucciones/6.LecturaDeParrafo.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_reading_instructions
      allowedKeys = 'space','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letter_A_instructions
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    TextComponent text_letter_A_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $open(f'resources/TextosInstrucciones/7.VocalA.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_letter_A_instructions
      allowedKeys = 'space','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pataka_instructions
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    TextComponent text_pataka_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $open('resources/TextosInstrucciones/8.Pataka.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_pataka_instructions
      allowedKeys = 'space','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letter_A_recording
    RoutineSettingsComponent letter_A_recording
      skipIf = key_resp_letter_A_instructions.keys == 's'
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    KeyboardComponent key_resp_letter_A
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.5
      store = nothing
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    ImageComponent image_microphone_letter_A
      image = resources/microphone.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    CodeComponent code_10
      Code Type = Py
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      Begin Routine:
        if key_resp_letter_A_instructions.keys != 's':
            recorder.start_recording(f'data/{expInfo["Nombre"]}/{expInfo["Nombre"]}_VocalA.wav')
      End Routine:
        if key_resp_letter_A_instructions.keys != 's':
            recorder.stop_recording()
            tempFileName = thisExp.dataFileName + '_TEMP.csv'
            thisExp.saveAsWideText(tempFileName)
  Routine pataka_recording
    RoutineSettingsComponent pataka_recording
      skipIf = key_resp_pataka_instructions.keys == 's'
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    KeyboardComponent key_resp_pataka
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.5
      store = nothing
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    ImageComponent image_microphone_pataka
      image = resources/microphone.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    CodeComponent code_11
      Code Type = Py
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      Begin Routine:
        if key_resp_pataka_instructions.keys != 's':
            recorder.start_recording(f'data/{expInfo["Nombre"]}/{expInfo["Nombre"]}_Pataka.wav')
      End Routine:
        if key_resp_pataka_instructions.keys != 's':
            recorder.stop_recording()
            tempFileName = thisExp.dataFileName + '_TEMP.csv'
            thisExp.saveAsWideText(tempFileName)
  Routine paragraph
    RoutineSettingsComponent paragraph
      skipIf = key_resp_reading_instructions.keys == 's'
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        if key_resp_reading_instructions.keys != 's':
            recorder.start_recording(f'data/{expInfo["Nombre"]}/{expInfo["Nombre"]}_LecturaDeParrafo.wav')
      End Routine:
        if key_resp_reading_instructions.keys != 's':
            recorder.stop_recording()
            tempFileName = thisExp.dataFileName + '_TEMP.csv'
            thisExp.saveAsWideText(tempFileName)
    KeyboardComponent key_resp_reading
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent paragraph_image
      image = resources/texto.jpg
      size = (1.75, 1)
      startVal [time (s)] = 0.0
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  Routine acknowledgment
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $open('resources/TextosInstrucciones/9.CuestionarioYFin.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pulses_trial_instructions
    RoutineSettingsComponent pulses_trial_instructions
      saveStartStop = False
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    TextComponent pulses_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        A continuacion se mandaran 5 pulsos al equipo, acompañados de un sonido espaciados con 2 segundos.

        Pulse ESPACIO y espere 2 segundos.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank_2
    RoutineSettingsComponent blank_2
      saveStartStop = False
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    TextComponent blank
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine pulses
    RoutineSettingsComponent pulses
      saveStartStop = False
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    SoundComponent sound_1
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        recorder._send_pulse_to_arduino()
  Routine pulses_response
    RoutineSettingsComponent pulses_response
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si vio los 5 pulsos en la señal, presione ESPACIO para continuar.

        Si no, presione ESC y DESCONECTE el dispositivo serial.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine pulses_trial_instructions
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine blank_2
    Routine pulses
  LoopTerminator trials
  Routine pulses_response
  Routine welcome
  Routine typical_day_instructions
  Routine typical_day_recording
  Routine pleasant_memory_instructions
  Routine pleasant_memory_recording
  Routine picture_description_instructions
  Routine picture
  Routine picture_description_instructions_2
  Routine picture_2
  Routine retelling_instructions
  Routine story
  Routine retelling_instructions_2
  Routine retelling_recording
  Routine reading_instructions
  Routine paragraph
  Routine letter_A_instructions
  Routine letter_A_recording
  Routine pataka_instructions
  Routine pataka_recording
  Routine acknowledgment
